PsychoPy2experiment version="2024.1.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = Motor Imagery
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine GoodByeScreen
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    TextComponent textGoodBuyMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Obrigado por participar
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  Routine rest
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    TextComponent textrest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Descansa durante 4s
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    PolygonComponent polygon_rest
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos = (-0.80,-0.5)
      shape = rectangle
      size = (0.2, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine StartScreen
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    TextComponent textOrientationMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions1
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    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen
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    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Bem-Vindo ao Experimento!
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  Routine Start2Screen
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    TextComponent textOrientationMessage2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions2
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    KeyboardComponent keyOrientation2Message
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank200
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    TextComponent textBlank200
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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  Routine start
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    PolygonComponent polygon_start
      fillColor = -1.0000, 1.0000, 1.0000
      lineColor = -1.0000, 1.0000, 1.0000
      pos = (-0.80,-0.5)
      shape = rectangle
      size = (0.2, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine task
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    PolygonComponent polygonDE
      fillColor [set every repeat] = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = 0.0000, 0.0000, 0.0000
      pos = (-0.80,-0.5)
      shape = rectangle
      size = (0.2, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent codeDE
      Code Type = Auto->JS
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      Each Frame:
        # Altera a cor do polígono com base em uma variável
        if individual_punho == "Imagens/right.png":
            polygonDE.fillColor = (-0.35, -0.35, -0.35)
    ImageComponent image
      image [set every repeat] = $individual_punho
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine task2
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    PolygonComponent polygonPP
      fillColor [set every repeat] = -0.5500, -0.5500, -0.5500
      lineColor [set every repeat] = -0.5500, -0.5500, -0.5500
      pos = (-0.80,-0.5)
      shape = rectangle
      size = (0.2, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Altera a cor do polígono com base em uma variável
        if ambos_punhos_pes == "Imagens/up.png":
            polygonPP.fillColor = (-0.9, -0.9, -0.9)
    ImageComponent image_2
      image [set every repeat] = $ambos_punhos_pes
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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Flow
  Routine WelcomeScreen
  Routine blank200
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = Stimulation.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'individual_punho': 'Imagens/right.png', 'ambos_punhos_pes': 'Imagens/up.png', 'instructions1': 'Vais fechar e abrir o punho direito ou esquerdo, mediante te apareça as setas "Direita" ou "Esquerda". Pressione a barra do ESPAÇO para começar.', 'instructions2': 'Vais fechar e abrir ambos os punhos ou os pés, mediante te apareçam as setas "Para cima" ou "Para baixo", respetivamente. Pressione a barra do ESPAÇO para começar.'},
        {'individual_punho': 'Imagens/left.png', 'ambos_punhos_pes': 'Imagens/down.png', 'instructions1': 'Vais imaginar o movimento de fechar e abrir o punho direito ou esquerdo, mediante te apareça as setas "Direita" ou "Esquerda". Pressione a barra do ESPAÇO para começar.', 'instructions2': 'Vais imaginar o movimento de fechar e abrir ambos os punhos ou os pés, mediante te apareçam "Para cima" ou "Para baixo", respetivamente.  Pressione a barra do ESPAÇO para começar.'}]
      Routine StartScreen
      Routine start
      LoopInitiator imageryTrials loopType="TrialHandler"
        conditionsFile = Stimulation.xlsx
        loopType = random
        nReps = 4
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        conditions:
          [{'individual_punho': 'Imagens/right.png', 'ambos_punhos_pes': 'Imagens/up.png', 'instructions1': 'Vais fechar e abrir o punho direito ou esquerdo, mediante te apareça as setas "Direita" ou "Esquerda". Pressione a barra do ESPAÇO para começar.', 'instructions2': 'Vais fechar e abrir ambos os punhos ou os pés, mediante te apareçam as setas "Para cima" ou "Para baixo", respetivamente. Pressione a barra do ESPAÇO para começar.'},
          {'individual_punho': 'Imagens/left.png', 'ambos_punhos_pes': 'Imagens/down.png', 'instructions1': 'Vais imaginar o movimento de fechar e abrir o punho direito ou esquerdo, mediante te apareça as setas "Direita" ou "Esquerda". Pressione a barra do ESPAÇO para começar.', 'instructions2': 'Vais imaginar o movimento de fechar e abrir ambos os punhos ou os pés, mediante te apareçam "Para cima" ou "Para baixo", respetivamente.  Pressione a barra do ESPAÇO para começar.'}]
        Routine rest
        Routine task
      LoopTerminator imageryTrials
    LoopTerminator trials_3
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = Stimulation.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'individual_punho': 'Direito', 'ambos_punhos_pes': 'Punhos', 'instructions1': 'Vais fechar e abrir o punho direito ou esquerdo, mediante te apareça as palavras "Direito" ou "Esquerdo". Pressione a barra do ESPAÇO para começar.', 'instructions2': 'Vais fechar e abrir ambos os punhos ou os pés, mediante te apareça as palavras "Punhos" ou "Pés". Pressione a barra do ESPAÇO para começar.'},
        {'individual_punho': 'Esquerdo', 'ambos_punhos_pes': 'Pés', 'instructions1': 'Vais imaginar o movimento de fechar e abrir o punho direito ou esquerdo, mediante te apareça as palavras "Direito" ou "Esquerdo". Pressione a barra do ESPAÇO para começar.', 'instructions2': 'Vais imaginar o movimento de fechar e abrir ambos os punhos ou os pés, mediante te apareça as palavras "Punhos" ou "Pés". Pressione a barra do ESPAÇO para começar.'}]
      Routine Start2Screen
      Routine start
      LoopInitiator imageryTrials2 loopType="TrialHandler"
        conditionsFile = Stimulation.xlsx
        loopType = random
        nReps = 4
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        conditions:
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        Routine rest
        Routine task2
      LoopTerminator imageryTrials2
    LoopTerminator trials_4
  LoopTerminator trials
  Routine GoodByeScreen
